PsychoPy2experiment version="2020.1.3"
Settings
  Audio lib = pyo
  Experiment info = {'Please enter the first 3 letters of your name. (e.g. ABC for ABCDEF)': '', 'Please enter the first 3 numbers of your bith date(e.g. 123 for 12 of March)': '', 'Session (ingore)': '1', 'participant': '(ignore)'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1.000,1.000,1.000]
  expName = thesis berry
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Routines
  Routine welcome_card
    TextComponent wlcm_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        welcome to the experiment.

        press "space" to continue
    KeyboardComponent wlcm_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent buffer_500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trt_corr_resp
    TextComponent train_corr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = monki decide good
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  Routine trt_incorr_resp
    TextComponent train_incorr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = monki decide bad
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  Routine training
    PolygonComponent Train_HB_BG
      fillColor = $TR_HB_BG_Colour
      lineColor = $TR_HB_BG_Line_Colour
      pos = (0, 0.25)
      shape = rectangle
      size = (BG_width, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent Train_HB_DYN
      fillColor [set every frame] = $TR_HB_Colour
      lineColor = $TR_HB_Line_Colour
      pos [set every frame] = (tr_xpos, 0.25)
      shape = rectangle
      size [set every frame] = (Train_HB_Width, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent train_berry_image
      image [set every repeat] = $berry_train
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent train_berry_resp
      allowedKeys = 'f', 'j'
      correctAns = $train_ANS
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [time (s)] = 2.5
      storeCorrect = True
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    TextComponent eat_tr_text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = EAT
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    TextComponent fast_tr_text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = FAST
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  Routine fix_cross
    PolygonComponent FC_TR_HB_BG
      fillColor = $TR_HB_BG_Colour
      lineColor = $TR_HB_BG_Line_Colour
      pos = (0, 0.25)
      shape = rectangle
      size = (BG_width, BG_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent FC_TR_HB_DYN
      fillColor [set every frame] = $TR_HB_Colour
      lineColor = $TR_HB_Line_Colour
      pos [set every frame] = (tr_xpos, 0.25)
      shape = rectangle
      size [set every frame] = (Train_HB_Width, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent TR_FC
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine train_block_counter
    TextComponent train_block_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        you finished the block

        press "space" to continue.
    KeyboardComponent block_skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent trainCounter_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trainCounter
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  Routine corrector_code
    CodeComponent code_de_corrector
      Code Type = Auto->JS
  Routine train_code
    CodeComponent train_code_comp
      Code Type = Auto->JS
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      Begin Experiment:
        #variables to prevent crashing
        trtcorrRep = 0
        trtincorrRep = 0
        TrainCorrANS = ""
        tr_xpos = 0
      Each Frame:
        #Health Bar Code
        #Make big or small depending on answer.
        if train_berry_resp.corr:
            Train_HB_Width += 0.01
            tr_xpos += 0.01/2
        else:
            Train_HB_Width -= 0.01
            tr_xpos -= 0.01/2

        #decide whether if the participant is
        #in correct direction or not.
        if Train_HB_Width >= 0.0:
            TR_HB_Colour = [0,1,0]
        elif Train_HB_Width <= 0.01:
            TR_HB_Colour = [1,0,0]
  Routine master_code
    CodeComponent experiment_control
      Code Type = Auto->JS
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      Begin Experiment:
        #experiment settings

        NAA = "Not at all"
        COMP = "Completely"

        # change if you want different keys.
        # DO NOT FORGET TO CHANGE RESPONSE KEYS AFTERWARDS.
        eat = "f"
        fast = "j"

        #numbers of trial/blocks.
        num_blocks = 6
        # -1 is for accuracy. Change the LEFT number.
        num_trials = 31 - 1

        #General Health Bar settings
        BG_width = 0.4
        BG_height = 0.05

        # variable holders
        berry_img = []

        #Acronyms:
        #TR = Train, TS = Test
        #HB = Health Bar, BG = Background
        #FC = Fix Cross
        #HL = highlight

        #health bar settings for Training
        TR_HB_Colour = "green"
        TR_HB_Line_Colour = "black"
        TR_HB_BG_Colour = "white"
        TR_HB_BG_Line_Colour = "black"
        Train_HB_Width = 0.0

        #health bar settings for Testing
        TS_HB_Colour = "green"
        TS_HB_Line_Colour = "black"
        TS_HB_BG_Colour = "white"
        TS_HB_BG_Line_Colour = "black"
        Test_HB_Width = 0.0

        #health bar settings for Testing2
        TS2_HB_Colour = "green"
        TS2_HB_Line_Colour = "black"
        TS2_HB_BG_Colour = "white"
        TS2_HB_BG_Line_Colour = "black"
        Test2_HB_Width = 0.0
  Routine train_end_card
    TextComponent TR_end_txt
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        You have finished the training task.

        press "space" to continue.
    KeyboardComponent TR_end_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_info_card
    TextComponent test_info_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will once again see berries.

        Again, decide whether to;
        EAT ("F"), or FAST ("J").

        press "space" to continue.
    KeyboardComponent test_info_skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_info_card
    TextComponent info_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will see berries.
        Responses are through your keyboard clicks.

        Please Decide whether to;
        EAT "F", or FAST "J".

        Correct answers increase the health-bar to the right (green)
        Incorrect answers increase the health-bar to the left (red)

        There are 6 blocks in total.

        press "space" to start
    KeyboardComponent info_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_code
    CodeComponent test_code_comp
      Code Type = Auto->JS
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      Begin Experiment:
        #variable holders to prevent crashing.
        ts_xpos = 0
      Each Frame:
        #Health Bar Code
        #Make big or small depending on answer.
        if test_berry_resp.corr:
            Test_HB_Width += 0.01
            ts_xpos += 0.01/2
        else:
            Test_HB_Width -= 0.01
            ts_xpos -= 0.01/2

        #decide whether if the participant is
        #in correct direction or not.
        if Test_HB_Width >= 0.01:
            TS_HB_Colour = "green"
        elif Test_HB_Width <= 0.01:
            TS_HB_Colour = "red"
  Routine ts_fix_cross
    PolygonComponent ts_FC
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine test
    ImageComponent test_berry_img
      image [set every repeat] = $test_berry
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent test_berry_resp
      allowedKeys = 'f', 'j'
      correctAns = $test_ANS
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 2.25
      storeCorrect = True
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    TextComponent eat_ts_text
      color = black
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = EAT
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    TextComponent fast_ts_text
      color = black
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = FAST
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  Routine test_block_counter
    TextComponent TS_block_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished this block.

        press "space" to continue.
    KeyboardComponent TS_block_skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ts1Counter_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ts1Counter
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  Routine end_card
    TextComponent first_section_end_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished the first half of the experiment.

        Press space to continue to the next section.
    KeyboardComponent first_section_end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tr_corrector_code
    CodeComponent train_correct_terminate
      Code Type = Auto->JS
  Routine ts_corrector_code
    CodeComponent code
      Code Type = Auto->JS
  Routine test_2_proc_card
    TextComponent test2_proc_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your patience.

        You will once again see berries and decide whether:
         to eat("F") or fast("J").

        press "space" to start
    KeyboardComponent test2_proc_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test2_code
    CodeComponent test2_code_comp
      Code Type = Auto->JS
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      Begin Experiment:
        #holder to prevent crash
        ts2_xpos = 0
      Each Frame:
        #Health Bar Code
        # Make big or small depending on answer.

        if test2_berry_resp.corr:
            Test2_HB_Width += 0.01
            ts2_xpos += 0.01/2
        else:
            Test2_HB_Width -= 0.01
            ts2_xpos -= 0.01/2

        #Decide whether if the participant is
        #in correct direction or not.
        if Test2_HB_Width >= 0.01:
            TS2_HB_Colour = "green"
        elif Test2_HB_Width <= 0.01:
            TS2_HB_Colour = "red"

        if test2_trials.thisRepN == 20:
            test2_trials.finished = True
  Routine ts2_fix_cross
    PolygonComponent TS2_FC
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine test2
    ImageComponent test2_berry_img
      image [set every repeat] = $test2_berry
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent test2_berry_resp
      allowedKeys = 'f', 'j'
      correctAns = $test2_ANS
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 2.25
      storeCorrect = True
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    TextComponent ts2_eat_txt
      color = black
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = EAT
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    TextComponent ts2_fast_txt
      color = black
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = FAST
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  Routine ts2_corrector_code
    CodeComponent code_2
      Code Type = Auto->JS
  Routine ts2_block_counter
    TextComponent ts2_block_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        you have finished this block.

        press "space" to continue.
    KeyboardComponent test2_block_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ts2counter_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ts2Counter
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  Routine end_card_2
    TextComponent end_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        You have finished the experiment.

        thank you for your time.
    KeyboardComponent end_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine HB_reset_test
    CodeComponent test_hb_corrector
      Code Type = Auto->JS
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      Begin Experiment:
        ts1Counter = 0

        TS1BRIF = 0
        TS1BRIE = 20
        TS1BLDummy = 0
        TS1BRIter = "0:19"
      Begin Routine:
        Test_HB_Width = 0
        ts_xpos = 0
        ts1Counter += 1


        if TS1BLDummy == 0:
            TS1BRIter = "0:20"
            TS1BLDummy += 1
        else:
            TS1BRIF += 20
            TS1BRIE += 20
            TS1BRIter = str(TS1BRIF) + ":" + str(TS1BRIE)
  Routine train_HB_reset
    CodeComponent train_HB_corrector
      Code Type = Auto->JS
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      Begin Experiment:
        trainCounter = 0
        # TRBLDummy = Training Block Dummy

        BRIF = 0
        BRIE = 20
        TRBLDummy = 0
        blockRowIter = "0:19"

        #BRIF += 20
        #BRIE += 20
        #blockRowIter = str(BRIF) + ":" + str(BRIE)

        #elif train_blocks.thisN == 1:
         #   blockRowIter = "20:40"
        #elif train_blocks.thisN == 2:
          #  blockRowIter = "40:60"
        #elif train_blocks.thisN == 3:
        #    blockRowIter = "60:80"
        #elif train_blocks.thisN == 4:
        #    blockRowIter = "80:100"
        #elif train_blocks.thisN == 5:
        #    blockRowIter = "100:120"
      Begin Routine:
        Train_HB_Width = 0
        tr_xpos = 0
        trainCounter += 1

        if TRBLDummy == 0:
            blockRowIter = "0:20"
            TRBLDummy += 1
        else:
            BRIF += 20
            BRIE += 20
            blockRowIter = str(BRIF) + ":" + str(BRIE)
  Routine test2_HB_reset
    CodeComponent test2_HB_corrector
      Code Type = Auto->JS
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      Begin Experiment:
        ts2Counter = 0

        TS2BRIF = 0
        TS2BRIE = 20
        TS2BLDummy = 0
        TS2BRIter = "0:19"
      Begin Routine:
        Test2_HB_Width = 0
        ts2_xpos = 0
        ts2Counter += 1


        if TS2BLDummy == 0:
            TS2BRIter = "0:20"
            TS2BLDummy += 1
        else:
            TS2BRIF += 20
            TS2BRIE += 20
            TS2BRIter = str(TS2BRIF) + ":" + str(TS2BRIE)
  Routine info_1_card
    TextComponent info1text
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        A Learning Experiment


        Thank you for your interest in this study. Before you decide whether to take part, please read the following information carefully (this sheet is for you to keep). You may ask me any questions if you would like more information.

        What is this research looking at?
        We are looking into how people learn a task through a training and testing experiment.

        Do I have to take part?
        It is up to you to decide to join the study. We will describe the study and go through this information sheet. If you agree to take part, we will then ask you to sign a consent form. You are free to withdraw at any time, without giving a reason. This would not affect you in any way.

        What will happen if I agree to take part?
        The experiment consists of two sections. Within the first section there are two parts. In the first part (training) you will be shown some berry images and are asked to decide whether to eat the berries or fast. You will see a health-bar indicating whether you have chosen the correct option or not. In the second part (testing) you will again be shown the berries and decide whether to eat or fast but you will not be seeing the health-bar. You will then be asked to close your eyes for 5 minutes prior to the final part of the experiment. The experiment will take 20 minutes to complete.

        Are there any problems with taking part?
        This research is deemed safe by the UEA Ethics committee. However, if at any point you feel uncomfortable you are free to leave the experiment.

        Will it help me if I take part?
        No, however, it will he us with our research. You will receive 1 SONA credit.

        How will you store the information that I give you?
        All information which you provide during the study will be stored in accordance with the 2018 General Data Protection Regulation and kept strictly confidential. The chief investigator will be the custodian of the anonymous research data. Any identifiable data will be stored separately in a password protected file and will be securely disposed of as soon as it is no longer necessary, and within 5 years. All anonymized results will be stored indefinitely in order to comply with open practice standards.  The data can not be identifiable to any single person. Your data will only be accessible by the research team.
    TextComponent info1_txt
      color = black
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = press "space" to continue.
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    KeyboardComponent info1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info_2_card
    TextComponent info2text
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        How will the data be used?
        The data will be used to write up a third year BSc Psychology Undergraduate thesis project. Your data will not be identifiable to yourself.

        What happens if I agree to take part, but change my mind later?
        You will be given the chance to withdraw your data from the research dataset at the end of the experiment. Due to the online nature of the experiment, after the experiment is finished we will not be able to identify any single data point to any single person.

        How do I know that this research is safe for me to take part in?
        This study has been approved by Psychology Research Ethics Committee at the University of East Anglia.

        You are under no obligation to agree to take part in this research.
        If you do agree you can withdraw at any time without giving a reason.

        Contact details:

        Researcher: K.kacar@uea.ac.uk
        Supervisor: W.Penny@uea.ac.uk

        Do also contact us if you have any worries or concerns about this research.
         School of Psychology Ethics Committee:
        ethics.psychology@uea.ac.uk;  Phone 01603 597146
        Head of School Professor Kenny Coventry:
        k.coventry@uea.ac.uk; Phone 01603 597145
    TextComponent info2_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = press "space" to continue.
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    KeyboardComponent info2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info_3_card
    ImageComponent info3_img
      image = info3.png
      pos = (0, 0.05)
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent info3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent info3_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = press "space" to continue.
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  Routine info_4_card
    ImageComponent info4_img
      image = info4.png
      pos = (0, 0.05)
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent info4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent info4_txt
      color = black
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = press "space" to continue.
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  Routine consent_card
    CodeComponent consent_code
      Code Type = Auto->JS
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      Begin Experiment:
        consent_rep = 0
    TextComponent consent_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        CONSENT FORM

        I have read and understand the information sheet [A Learning Experiment] and have had the opportunity to questions and have had these answered satisfactorily.

        My participation is voluntary and I know that I am free to withdraw at any time, without giving any reason and without it affecting me at all

        I know that no personal information (such as my name) will be shared outside of the research team or published in the final report(s) from this research

        I agree to take part in the above study
    TextComponent consent_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
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      text:
        press "y" if you consent.
        press "n" if you do NOT consent.
    KeyboardComponent consent_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debrief_1_card
    KeyboardComponent debrief1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent debrief_text
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        University of East Anglia

        Debrief

        The effect of Surprise on Decision Making

        Thank you for participating in this study. Your time and efforts are much appreciated.

        We aimed to examine the effect of surprising stimuli on decision making. The berries fell into certain categories. Berries were surprising when an atypical exemplar of a berry was shown or a different category of berry was shown. We wished to find out if the surprise of a stimulus correlated with better classification during the test phase.

        If you have any questions regarding this study please feel free to ask or contact the researcher or supervisor of this study now, or at a later date. If you had previously wished to withdraw your data, please be assured that your data will not be used. This will not affect your compensation either way.

        If you feel uncomfortable after the experiment please contact your GP for help.

        If you would like to receive a report of the main findings of the study (or a summary of the findings) when it is completed please contact the researcher, however individual feedback on your results cannot be given.

        - Researcher: Kemal Kacar (K.kacar@uea.ac.uk)
        - Supervisor:  Will Penny (W.Penny@uea.ac.uk)

        Do also contact us if you have any worries or concerns about this research.
         School of Psychology Ethics Committee:
        ethics.psychology@uea.ac.uk;  Phone 01603 597146
        Head of School Professor Kenny Coventry:
        k.coventry@uea.ac.uk; Phone 01603 597145

        Thank you again for your participation.
    TextComponent debrief1_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = press "space" to continue
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  Routine debrief_2_card
    ImageComponent debrief2_img
      image = debrief2.png
      pos = (0, 0.05)
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    TextComponent debrief2_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = press "space" to continue.
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    KeyboardComponent debrief2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_corrector
    CodeComponent code_cons_corr
      Code Type = Auto->JS
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      Begin Routine:
        if consent_resp.keys == 'y':
            consent_rep = 1
        elif consent_resp.keys == 'n':
            consent_rep = 0
  Routine full_finish
    TextComponent finish_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished the experiment.
        We would like you to answer a few questions.

        press "space" to continue.
    KeyboardComponent finish_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tr_hl_disp
    PolygonComponent HL_TR_HB_BG
      fillColor = $TR_HB_BG_Colour
      lineColor = $TR_HB_BG_Line_Colour
      pos = (0, 0.25)
      shape = rectangle
      size = (BG_width, BG_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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    PolygonComponent HL_TR_HB_DYN
      fillColor [set every frame] = $TR_HB_Colour
      lineColor = $TR_HB_Line_Colour
      pos [set every frame] = (tr_xpos, 0.25)
      shape = rectangle
      size [set every frame] = (Train_HB_Width, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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    CodeComponent highlight_tr_code
      Code Type = Auto->JS
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      Begin Routine:
        tr_eat_hl = "black"
        tr_fast_hl = "black"
      Each Frame:
        if train_berry_resp.keys == 'f':
            tr_eat_hl = "red"
        elif train_berry_resp.keys == "j":
            tr_fast_hl = "red"
      End Routine:
        tr_eat_hl = "black"
        tr_fast_hl = "black"
    TextComponent tr_eat_hl_text
      color [set every frame] = $tr_eat_hl
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      text = EAT
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    TextComponent tr_fast_hl_text
      color [set every frame] = $tr_fast_hl
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      text = FAST
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  Routine ts1_hl_disp
    CodeComponent highlight_ts1_code
      Code Type = Auto->JS
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      Begin Routine:
        ts_eat_hl = "black"
        ts_fast_hl = "black"
      Each Frame:
        if test_berry_resp.keys == 'f':
            ts_eat_hl = "red"
        elif test_berry_resp.keys == 'j':
            ts_fast_hl = "red"
      End Routine:
        ts_eat_hl = "black"
        ts_fast_hl = "black"
    TextComponent ts_eat_hl_text
      color [set every frame] = $ts_eat_hl
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      text = EAT
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    TextComponent ts_fast_hl_text
      color [set every frame] = $ts_fast_hl
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      text = FAST
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  Routine ts2_hl_disp
    CodeComponent highlight_ts2_code
      Code Type = Auto->JS
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      Begin Routine:
        ts2_eat_hl = "black"
        ts2_fast_hl = "black"
      Each Frame:
        if test2_berry_resp.keys == 'f':
            ts2_eat_hl = "red"
        elif test2_berry_resp.keys == 'j':
            ts2_fast_hl = "red"
      End Routine:
        ts2_eat_hl = "black"
        ts2_fast_hl = "black"
    TextComponent ts2_eat_hl_text
      color [set every frame] = $ts2_eat_hl
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      text = EAT
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    TextComponent ts2_fast_hl_text
      color [set every frame] = $ts2_fast_hl
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      text = FAST
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  Routine quiescence_info_card
    PolygonComponent polygon
      fillColor = $[0.506,0.506,0.506]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextComponent quiescence_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        We would like you to close your eyes and relax.

        You will hear a sound when 5 minutes have passed.

        You will be able to press "space" to continue after 5 minutes.
    TextComponent end_quiescence
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 300
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      text:
        The break period has ended.

        press "space" to continue.
    KeyboardComponent quiescence_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 300
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    SoundComponent sound_1
      sound = Computer_Magic-Microsift-1901299923.wav
      startVal [time (s)] = 300
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  Routine relax_que
    SliderComponent quies_slider
      color = Black
      forceEndRoutine = True
      granularity = 0
      labels = NAA, COMP
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = 1, 2, 3, 4, 5, 6, 7
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    TextComponent ques_sli_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate how much you managed to relax and isolate from external stimuli
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  Routine tr_quest_select
    MouseComponent tr_quest_mouse
      clickable = CORRans1_sqr, ans2_sqr, ans3_sqr, ans4_sqr, ans5_sqr
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = CORRans1_sqr, ans2_sqr, ans3_sqr, ans4_sqr, ans5_sqr
      startVal [time (s)] = 0.0
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    PolygonComponent CORRans1_sqr
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, 0.1)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent ans2_sqr
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, 0.0)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent ans3_sqr
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, -0.1)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent ans4_sqr
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, -0.2)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent ans5_sqr
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, -0.3)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent ts_ts_instr_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Select the strategy that most resembles the one you used.
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    TextComponent ans1_text
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = If the number of red and blue pixels are similar it's eat, otherwise fast.
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    TextComponent ans2_text
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = If there are more red pixels on bottom half it's eat, otherwise it's fast.
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    TextComponent ans3_text
      color = black
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = If there are more red pixels on top half it's eat, otherwise it's fast.
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    TextComponent ans4_text
      color = black
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = If there are more blue pixels on top half it's eat, otherwise it's fast.
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    TextComponent ans5_text
      color = black
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = If there are more blue pixels on bottom half it's eat, otherwise it's fast.
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  Routine strategy_select
    MouseComponent strategy_response
      clickable = tr_str_sq, ts_str_sq, tr_str_sq, qs_str_sq, ts2_str_sq
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = tr_str_sq, ts_str_sq, tr_str_sq, qs_str_sq, ts2_str_sq
      startVal [time (s)] = 0.0
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    PolygonComponent tr_str_sq
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, 0.1)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent ts_str_sq
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent qs_str_sq
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, -0.1)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent ts2_str_sq
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0, -0.2)
      shape = rectangle
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent strategy_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = When did you start using that strategy?
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    TextComponent Training_Block_Str
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Training Block
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    TextComponent Testing_Block_Str
      color = Black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Testing Block
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    TextComponent Quiescence_Block_Str
      color = Black
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = While Relaxing
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    TextComponent Final_Testing_Block_Str
      color = Black
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Final Testing Block
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Flow
  Routine master_code
  Routine info_1_card
  Routine info_2_card
  Routine consent_card
  Routine consent_corrector
  LoopInitiator consent_check loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = consent_rep
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    Routine welcome_card
    Routine blank500
    Routine train_info_card
    LoopInitiator train_blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = num_blocks
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      Routine train_HB_reset
      LoopInitiator train_trials loopType="TrialHandler"
        Selected rows = $blockRowIter
        conditionsFile = train-data-holder.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img76.png'), ('train_ANS', 'f'), ('surprise_Val', 0.0)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img111.png'), ('train_ANS', 'j'), ('surprise_Val', 3.1431063103886)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img33.png'), ('train_ANS', 'j'), ('surprise_Val', 0.62121961261893)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img71.png'), ('train_ANS', 'f'), ('surprise_Val', 2.02631017440994)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img50.png'), ('train_ANS', 'j'), ('surprise_Val', 1.30938606227376)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img118.png'), ('train_ANS', 'j'), ('surprise_Val', 1.05691920755995)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img24.png'), ('train_ANS', 'j'), ('surprise_Val', 0.0855684134717886)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img90.png'), ('train_ANS', 'j'), ('surprise_Val', -0.0665622220329602)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img104.png'), ('train_ANS', 'j'), ('surprise_Val', -0.0350768543145276)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img51.png'), ('train_ANS', 'j'), ('surprise_Val', 0.574313078931395)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img38.png'), ('train_ANS', 'j'), ('surprise_Val', -0.130471118656208)]),
          OrderedDict([('berry_train', 'Train-stimuli(1)/stimuli/img80.png'), ('train_ANS', 'f'), ('surprise_Val', 1.4533405222205)])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
        Routine train_code
        Routine fix_cross
        Routine training
        Routine tr_hl_disp
      LoopTerminator train_trials
      Routine train_block_counter
    LoopTerminator train_blocks
    Routine train_end_card
    Routine test_info_card
    LoopInitiator test_blocks loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = num_blocks
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      Routine HB_reset_test
      LoopInitiator test_trials loopType="TrialHandler"
        Selected rows = $TS1BRIter
        conditionsFile = test-data-holder.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img76.png'), ('test_ANS', 'f')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img111.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img33.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img71.png'), ('test_ANS', 'f')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img50.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img118.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img24.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img90.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img104.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img51.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img38.png'), ('test_ANS', 'j')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img80.png'), ('test_ANS', 'f')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img63.png'), ('test_ANS', 'f')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img73.png'), ('test_ANS', 'f')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img58.png'), ('test_ANS', 'f')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img59.png'), ('test_ANS', 'f')]),
          OrderedDict([('test_berry', 'Train-stimuli(1)/stimuli/img52.png'), ('test_ANS', 'j')])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
        Routine test_code
        Routine ts_fix_cross
        Routine test
        Routine ts1_hl_disp
      LoopTerminator test_trials
      Routine test_block_counter
    LoopTerminator test_blocks
    Routine end_card
    Routine quiescence_info_card
    Routine test_2_proc_card
    LoopInitiator test2_blocks loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = num_blocks
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      Routine test2_HB_reset
      LoopInitiator test2_trials loopType="TrialHandler"
        Selected rows = $TS2BRIter
        conditionsFile = test2-data-holder.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img76.png'), ('test2_ANS', 'f')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img111.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img33.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img71.png'), ('test2_ANS', 'f')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img50.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img118.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img24.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img90.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img104.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img51.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img38.png'), ('test2_ANS', 'j')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img80.png'), ('test2_ANS', 'f')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img63.png'), ('test2_ANS', 'f')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img73.png'), ('test2_ANS', 'f')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img58.png'), ('test2_ANS', 'f')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img59.png'), ('test2_ANS', 'f')]),
          OrderedDict([('test2_berry', 'Train-stimuli(1)/stimuli/img52.png'), ('test2_ANS', 'j')])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
        Routine test2_code
        Routine ts2_fix_cross
        Routine test2
        Routine ts2_hl_disp
      LoopTerminator test2_trials
      Routine ts2_block_counter
    LoopTerminator test2_blocks
  LoopTerminator consent_check
  Routine full_finish
  Routine relax_que
  Routine tr_quest_select
  Routine strategy_select
  Routine debrief_1_card
  Routine end_card_2
